//==========================================================================
// TEST_CLRS.PRO
//   Description: Function to setup all colors/palettes for CMD task
//   Author: chenchal.subraveti@vanderbilt.edu
//   Date: 2018-12-07
//==========================================================================
//  Revision History:
//  001: 2018/09/09 chenchal subraveti
//       Global color indices and palettes for colors
//
//
declare TEST_SET_DEFAULT_COLORS();
declare TEST_SET_CLR(int colorIndex, int color_r, int color_g, int color_b);

// Global color Variables
// Default palettes
declare int constant PAL_DEFAULT = 0;
// There are 255 color indices in a palatte
// 0 is reserved for BLACK
// Use indices 1 to N for Target colorIndex etc
// Fill Indices from 255 backwards for other colors
int CLR_IDX_FIX         = 255;
int CLR_IDX_STOP_SIGNAL = 254;
int CLR_IDX_IGNORE      = 253;
int CLR_IDX_PTOTODIODE  = 247;


process TEST_SET_DEFAULT_COLORS()
{
    declare int r_, g_, b_;
    declare     targetIndex;
    declare     nTargets;
    declare int fixation_color[3];
    declare int stop_sig_color[3];
    declare int ignore_sig_color[3];

    r_ = 0;
    g_ = 1;
    b_ = 2;

    printf("CMD_CLRS: Setting indexed colors for default palette\n");

    // Default to gray
    fixation_color[r_] = RED_VAL - WR_OFF;
    fixation_color[g_] = GREEN_VAL - WG_OFF;
    fixation_color[b_] = BLUE_VAL - WB_OFF;
    spawn TEST_SET_CLR(CLR_IDX_FIX, fixation_color[r_], fixation_color[g_], fixation_color[b_]);

    stop_sig_color[r_] = 40;
    stop_sig_color[g_] = 40;
    stop_sig_color[b_] = 0;
    spawn TEST_SET_CLR(CLR_IDX_STOP_SIGNAL, stop_sig_color[r_], stop_sig_color[g_], stop_sig_color[b_]);

    ignore_sig_color[r_] = 0;
    ignore_sig_color[g_] = 36;
    ignore_sig_color[b_] = 0;
    spawn TEST_SET_CLR(CLR_IDX_STOP_SIGNAL, ignore_sig_color[r_], ignore_sig_color[g_], ignore_sig_color[b_]);

    spawn TEST_SET_CLR(CLR_IDX_PTOTODIODE, 255, 255, 255);


    // All target position colors are same see original DEFAULT.PRO
    targetIndex = 1;
    nTargets    = 8;
    while (targetIndex <= nTargets)
    {
        spawn TEST_SET_CLR(targetIndex, 35, 33, 27);

        targetIndex = targetIndex + 1;
        nexttick;
    }

    spawn TEST_SET_CLR(1, 255, 0, 0);
    spawn TEST_SET_CLR(2, 0, 0, 255);
} /* TEST_SET_DEFAULT_COLORS */


process TEST_SET_CLR(int colorIndex, int color_r, int color_g, int color_b)
{
    // Set current hardware palette color index to defined user choice
    dsendf("cm %d %d %d %d;\n", colorIndex, color_r, color_g, color_b);
}
