// This sets all of the colors up which will be needed for the protocol based on user input
// specified elsewhere
//
// written by david.c.godlove@vanderbilt.edu 	January, 2011

declare SET_CLRS(n_targ_pos);

process SET_CLRS(n_targ_pos)
	{
	declare hide int color_num,r_, g_, b_;
	declare hide int run_anti_sess = 9;
	declare hide int run_color_pop = 10;
	declare hide int run_pop_prime = 11;
	
	declare hide int ic;
	declare hide int sumProbs;
	declare hide int lastVal;
	declare hide int thisVal;
	declare hide int cumCProbs[6];
	declare hide int clrInd;
	declare hide int break;
	declare hide int randVal;
	declare hide int firstProb;
	declare hide int nPresent;
	declare hide int distColPick[6];
	declare hide int singColPick[6];
	declare hide int oldDist;
	declare hide int oldSing;
	
	r_ = 0; g_ = 1; b_ = 2;
	
	color_num = 0;
		
	while (color_num <=  n_targ_pos)				// set each target color to the matching color number 
		{
		dsendf("cm %d %d %d %d;\n",
						color_num + 1,				// 0 remains black
						Color_list[color_num,r_],	// GLOBAL ALERT; Color_list is an array so it cannot be passed
						Color_list[color_num,g_],
						Color_list[color_num,b_]);
		color_num = color_num + 1;
		nexttick;									// if we have a large number of targets we don't want to overflow the buffer
		}
	
		// if (expo_jitter_soa == 0) 
		// {
		// Fixation_color[r_]		= 0;
		// Fixation_color[g_]		= 36;
		// Fixation_color[b_]		= 0;
		// }
		// else if (expo_jitter_soa == 1)
		// {
		// Fixation_color[r_]		= 0;
		// Fixation_color[g_]		= 0;
		// Fixation_color[b_]		= 59;
		// }
	
	// Following code is specific to search task singleton color
	/*if (dynamicColor == 1 && State == run_anti_sess)
	{
		SingCol = random(2);
		if (SingCol == 0)
		{
			DistCol = 1;
		} else if (SingCol == 1)
		{
			DistCol = 0;
		}
	}
	*/
	// New section below allows for runs of "nPerRun" with the same color
	if ((State==run_anti_sess) || (State==run_color_pop) || (State==run_pop_prime))
	{
		if (dynamicColor < 2)
		{
			ic = 0;
			sumProbs = 0;
			firstProb = 0;
			while (ic < nClrs)
			{
				sumProbs = sumProbs+colorProbs[ic];
				distColPick[ic] = distColProbs[ic];
				ic = ic+1;
				//printf("ic = %d\n",ic);
				if (colorProbs[ic-1] > 0 && firstProb == 0)
				{
					firstProb = ic;
				}
			}
			nexttick;
			
			// turn relative probabilities into CDF*100
			ic = 0;
			lastVal = 0;
			thisVal = 0;
			while (ic < nClrs)
			{
				thisVal = colorProbs[ic]*100;
				cumCProbs[ic] = (thisVal/sumProbs)+lastVal;
				//printf("cumCProbs[ic] = %d\n",cumCProbs[ic]);
				lastVal = cumCProbs[ic];
				ic = ic+1;
			}
			nexttick;
			// Select random value
			randVal = random(100);
			if (randVal == 0)
			{
				clrInd = firstProb-1;
			} else
			{
				clrInd = 0;
				break = 0;
				while (randVal >= cumCProbs[clrInd] && break == 0)
				{
					clrInd = clrInd+1;
					if (clrInd == nClrs)
					{
						clrInd = nClrs - 1;
						break = 1;
					}
				}
			}
			SingCol = clrInd;
			//printf("SingCol = %d\n",clrInd);
			
			distColPick[SingCol] = 0;
			ic = 0;
			sumProbs = 0;
			firstProb = 0;
			while (ic < nClrs)
			{
				sumProbs = sumProbs+distColPick[ic];
				//printf("distColPick[%d] = %d\n",ic,distColPick[ic]);
				ic = ic+1;
				if (distColPick[ic-1] > 0 && firstProb == 0)
				{
					firstProb = ic;
				}
			}
			nexttick;
			
			// turn relative probabilities into CDF*100
			ic = 0;
			lastVal = 0;
			thisVal = 0;
			while (ic < nClrs)
			{
				thisVal = distColPick[ic]*100;
				cumCProbs[ic] = (thisVal/sumProbs)+lastVal;
				//printf("cumCProbs[%d] = %d\n",ic,cumCProbs[ic]);
				lastVal = cumCProbs[ic];
				ic = ic+1;
			}
			nexttick;
			// Select random value
			randVal = random(100);
			if (randVal == 0)
			{
				clrInd = firstProb-1;
			} else
			{
				clrInd = 0;
				break = 0;
				while (randVal >= cumCProbs[clrInd] && break == 0)
				{
					clrInd = clrInd+1;
					if (clrInd == nClrs)
					{
						clrInd = nClrs - 1;
						break = 1;
					}
				}
				
			}
			DistCol = clrInd;
			//SingCol = random(2);
		}
		else if (dynamicColor==2)
		{
			// Determine which thing needs switched
			if (whichSwitch == 1) // Singleton
			{
				//printf("S=%d,D=%d\n",SingCol,DistCol);
				if (nThisRun==0 && lastWasAbort==0)
			
				{
					// Check how many options we have...
					nPresent = 0;
					ic = 0;
					while (ic < nClrs)
					{
						//singColPick[ic] = colorProbs[ic];
						//if (ic != DistCol && colorProbs[ic] > 0 && distColPick[ic] > 0)
						if (colorProbs[ic] > 0 && distColProbs[ic] > 0)
						{
							nPresent = nPresent+1;
						}
						ic=ic+1;
					}
					//if (Comp_Trl_number == 0)
					//
					// 
					if (nPresent == 2 && Comp_Trl_number > 0)
					{
						if (colorProbs[SingCol] == 0 || colorProbs[DistCol] == 0)
						{
							ic = 0;
							sumProbs = 0;
							firstProb = 0;
							while (ic < nClrs)
							{
								sumProbs = sumProbs+colorProbs[ic];
								distColPick[ic] = distColProbs[ic];
								ic = ic+1;
								//printf("ic = %d\n",ic);
								if (colorProbs[ic-1] > 0 && firstProb == 0)
								{
									firstProb = ic;
								}
							}
							nexttick;
							
							// turn relative probabilities into CDF*100
							ic = 0;
							lastVal = 0;
							thisVal = 0;
							while (ic < nClrs)
							{
								thisVal = colorProbs[ic]*100;
								cumCProbs[ic] = (thisVal/sumProbs)+lastVal;
								//printf("cumCProbs[ic] = %d\n",cumCProbs[ic]);
								lastVal = cumCProbs[ic];
								ic = ic+1;
							}
							nexttick;
							// Select random value
							randVal = random(100);
							if (randVal == 0)
							{
								clrInd = firstProb-1;
							} else
							{
								clrInd = 0;
								break = 0;
								while (randVal >= cumCProbs[clrInd] && break == 0)
								{
									clrInd = clrInd+1;
									if (clrInd == nClrs)
									{
										clrInd = nClrs - 1;
										break = 1;
									}
								}
							}
							SingCol = clrInd;
							//printf("SingCol = %d\n",clrInd);
							
							distColPick[SingCol] = 0;
							ic = 0;
							sumProbs = 0;
							firstProb = 0;
							while (ic < nClrs)
							{
								sumProbs = sumProbs+distColPick[ic];
								//printf("distColPick[%d] = %d\n",ic,distColPick[ic]);
								ic = ic+1;
								if (distColPick[ic-1] > 0 && firstProb == 0)
								{
									firstProb = ic;
								}
							}
							nexttick;
							
							// turn relative probabilities into CDF*100
							ic = 0;
							lastVal = 0;
							thisVal = 0;
							while (ic < nClrs)
							{
								thisVal = distColPick[ic]*100;
								cumCProbs[ic] = (thisVal/sumProbs)+lastVal;
								//printf("cumCProbs[%d] = %d\n",ic,cumCProbs[ic]);
								lastVal = cumCProbs[ic];
								ic = ic+1;
							}
							nexttick;
							// Select random value
							randVal = random(100);
							if (randVal == 0)
							{
								clrInd = firstProb-1;
							} else
							{
								clrInd = 0;
								break = 0;
								while (randVal >= cumCProbs[clrInd] && break == 0)
								{
									clrInd = clrInd+1;
									if (clrInd == nClrs)
									{
										clrInd = nClrs - 1;
										break = 1;
									}
								}
								
							}
							DistCol = clrInd;
						} else
						{
							//printf("Only one option: Switching DistCol and SingCol\n");
							oldDist = DistCol;
							oldSing = SingCol;
							//printf("Current D=%d,S=%d,dTmp=%d\n",DistCol,SingCol,oldDist);
							DistCol = oldSing;
							SingCol = oldDist;
							//printf("New D=%d,S=%d,dTmp=%d,sTmp=%d\n",DistCol,SingCol,oldDist,oldSing);
						}	
						
						
						
						
					} else
					{
				
						// We need to make sure the distractor is not a possible target color...
						// So,
						//printf("DistCol=%d\n",DistCol);
						//printf("colorProbs[DistCol] = %d\n",colorProbs[DistCol]);
						if (colorProbs[DistCol] > 0 && Comp_Trl_number > 0)
						{
							ic = 0;
							while (ic < nClrs)
							{
								distColPick[ic] = distColProbs[ic];
								ic = ic+1;
							}
							distColPick[DistCol] = 0;
							//distColPick[DistCol] = 0;
							
							ic = 0;
							sumProbs = 0;
							firstProb = 0;
							while (ic < nClrs)
							{
								sumProbs = sumProbs+distColPick[ic];
								//printf("distColPick[%d] = %d\n",ic,distColPick[ic]);
								ic = ic+1;
								if (distColPick[ic-1] > 0 && firstProb == 0)
								{
									firstProb = ic;
								}
							}
							nexttick;
							
							// turn relative probabilities into CDF*100
							ic = 0;
							lastVal = 0;
							thisVal = 0;
							while (ic < nClrs)
							{
								thisVal = distColPick[ic]*100;
								cumCProbs[ic] = (thisVal/sumProbs)+lastVal;
								//printf("cumCProbs[%d] = %d\n",ic,cumCProbs[ic]);
								lastVal = cumCProbs[ic];
								ic = ic+1;
							}
							nexttick;
							// Select random value
							randVal = random(100);
							if (randVal == 0)
							{
								clrInd = firstProb-1;
							} else
							{
								clrInd = 0;
								break = 0;
								while (randVal >= cumCProbs[clrInd] && break == 0)
								{
									clrInd = clrInd+1;
									if (clrInd == nClrs)
									{
										clrInd = nClrs - 1;
										break = 1;
									}
								}
								
							}
							DistCol = clrInd;
							// Too many instructions? Let's cut that and just set DistCol=firstProb-1;
							// This will assign the distractor color to be the first one with a non-zero probability (not probabilistically choosing like elsewhere)
							
							//DistCol = firstProb-1;
							
						}
					
						//printf("New DistCol=%d\n",DistCol);
						nexttick;
						
						// Pick new singleton color probabilistically
						ic = 0;
						while (ic < nClrs)
						{

							singColPick[ic] = colorProbs[ic];
							ic = ic+1;
						}
						//printf("Set aside singleton colors...\n");
						//singColPick[SingCol] = 0;
						// Definitely need to cut out DistCol in order to prevent "Catch" trial...
						if (Comp_Trl_number > 0 || lastSwitch == whichSwitch)
						{
							singColPick[DistCol] = 0;
						}
						//if (switchColors == 1) //Not sure what this switchColors does...
						//{
						nexttick;
						// Ensure there is at least one other option...
						//printf("Checking for options...\n");
						ic = 0;
						nPresent = 0;
						while (ic < nClrs)
						{
							if (singColPick[ic] > 0)
							{
								nPresent = nPresent + 1;
							}
							ic = ic + 1;
						}
						if (nPresent == 1)
						{
							//printf("Only one option: Switching DistCol and SingCol\n");
							oldDist = DistCol;
							oldSing = SingCol;
							//printf("Current D=%d,S=%d,dTmp=%d\n",DistCol,SingCol,oldDist);
							DistCol = oldSing;
							SingCol = oldDist;
							//printf("New D=%d,S=%d,dTmp=%d,sTmp=%d\n",DistCol,SingCol,oldDist,oldSing);
							//colorProbs[SingCol] = colorProbs[DistCol];
							//colorProbs[DistCol] = 0;
							//distColProbs[DistCol] = distColProbs[SingCol];
							//distColProbs[SingCol] = 0;
							
						} else
						{
							//printf("Selecting new SingletonColor\n");
							if (Comp_Trl_number > 0 || lastSwitch == whichSwitch)
							{
								singColPick[SingCol] = 0;
							}
							ic = 0;
							sumProbs = 0;
							firstProb = 0;
							while (ic < nClrs)
							{
								sumProbs = sumProbs+singColPick[ic];
								ic = ic+1;
								//printf("\nsingColPick[%d] = %d\n",ic-1,singColPick[ic-1]);
								if (singColPick[ic-1] > 0 && firstProb == 0)
								{
									firstProb = ic;
								}
							}
							nexttick;
							
							// turn relative probabilities into CDF*100
							ic = 0;
							lastVal = 0;
							thisVal = 0;
							while (ic < nClrs)
							{
								thisVal = singColPick[ic]*100;
								cumCProbs[ic] = (thisVal/sumProbs)+lastVal;
								//printf("cumCProbs[ic] = %d\n",cumCProbs[ic]);
								lastVal = cumCProbs[ic];
								ic = ic+1;
							}
							nexttick;
							// Select random value
							randVal = random(100);
							if (randVal == 0)
							{
								clrInd = firstProb-1;
							} else
							{
								clrInd = 0;
								break = 0;
								while (randVal >= cumCProbs[clrInd] && break == 0)
								{
									clrInd = clrInd+1;
									if (clrInd == nClrs)
									{
										clrInd = nClrs - 1;
										break = 1;
									}
								}
							}
							SingCol = clrInd;
						}
					}
						/*if (SingCol == 0)
						{
						SingCol = 1;
						}
						else if (SingCol == 1)
						{
						SingCol = 0;
						}
						*/
					//}
				}
			} else if (whichSwitch == 2) // Distractor
			{
				if (nThisRun == 0 && lastWasAbort == 0)
				{
					// Pick new distractor color probabilistically
					ic = 0;
					while (ic < nClrs)
					{
						distColPick[ic] = distColProbs[ic];
						ic = ic+1;
					}
					// Definitely need to set SingCol to 0 so they aren't catch...
					if (Comp_Trl_number > 0 || lastSwitch != whichSwitch)
					{
						distColPick[SingCol] = 0;
					}
					
					// Ensure there is at least one other option...
					ic = 0;
					nPresent = 0;
					while (ic < nClrs)
					{
						if (distColPick[ic] > 0)
						{
							nPresent = nPresent + 1;
						}
						ic = ic+1;
					}
					if (nPresent == 1)
					{
						printf("\n\n\n***NOT ENOUGH OPTIONS... KEEPING OLD DISTRACTOR COLOR\n\n\n");
					} else
					{	
						if (Comp_Trl_number > 0 || lastSwitch != whichSwitch)
						{
							distColPick[DistCol] = 0;
						}
						
						//if (switchColors == 1) //Not sure what this switchColors does...
						//
						ic = 0;
						sumProbs = 0;
						firstProb = 0;
						while (ic < nClrs)
						{
							sumProbs = sumProbs+distColPick[ic];
							ic = ic+1;
							if (distColPick[ic-1] > 0 && firstProb == 0)
							{
								firstProb = ic;
							}
						}
						nexttick;
						
						// turn relative probabilities into CDF*100
						ic = 0;
						lastVal = 0;
						thisVal = 0;
						while (ic < nClrs)
						{
							thisVal = distColPick[ic]*100;
							cumCProbs[ic] = (thisVal/sumProbs)+lastVal;
							//printf("cumCProbs[ic] = %d\n",cumCProbs[ic]);
							lastVal = cumCProbs[ic];
							ic = ic+1;
						}
						nexttick;
						// Select random value
						randVal = random(100);
						if (randVal == 0)
						{
							clrInd = firstProb-1;
						} else
						{
							clrInd = 0;
							break = 0;
							while (randVal >= cumCProbs[clrInd] && break == 0)
							{
								clrInd = clrInd+1;
								if (clrInd == nClrs)
								{
									clrInd = nClrs - 1;
									break = 1;
								}
							}
						}
						DistCol = clrInd;
					}
				}
			}
			lastSwitch = whichSwitch;
			/*if (nThisRun==0)
			{
				if (switchColors == 1)
				{
					if (SingCol == 0)
					{
					SingCol = 1;
					}
					else if (SingCol == 1)
					{
					SingCol = 0;
					}
				}
			}
			
			if (SingCol == 0)
			{
				DistCol = 1;
			} else if (SingCol == 1)
			{
				DistCol = 0;
			}
			*/
		}
		
	}
	
	if ((Catch==1) && ((State==run_color_pop) || (State==run_pop_prime)))
	{
		SingCol = DistCol;
	}
	
	if (SingCol == 0) // Red
		{
		//Singleton_color[r_]		= 63;	
		//Singleton_color[g_]		= 0;	
		//Singleton_color[b_]		= 0;
		Singleton_color[r_] 	= redVal;
		Singleton_color[g_] 	= 0;
		Singleton_color[b_] 	= 0;
		
		}
	else if (SingCol == 1) // Green
		{
		//Singleton_color[r_]		= 0;	
		//Singleton_color[g_]		= 36;	
		//Singleton_color[b_]		= 0;
		Singleton_color[r_] 	= 0;
		Singleton_color[g_] 	= greenVal;
		Singleton_color[b_] 	= 0;
		}
	else if (SingCol == 2) // Blue
		{
		//Singleton_color[r_]		= 0;	
		//Singleton_color[g_]		= 0;	
		//Singleton_color[b_]		= 59;
		Singleton_color[r_] 	= 0;
		Singleton_color[g_] 	= 0;
		Singleton_color[b_] 	= blueVal;
		}		
	else if (SingCol == 3) // Yellow
		{
		//Singleton_color[r_]		= 100;	
		//Singleton_color[g_]		= 100;	
		//Singleton_color[b_]		= 0;
		Singleton_color[r_] 	= redVal-yrOff;
		Singleton_color[g_] 	= greenVal-ygOff;
		Singleton_color[b_] 	= 0;
		}	
	else if (SingCol == 4) // Magenta
		{
		//Singleton_color[r_]		= 255;	
		//Singleton_color[g_]		= 33;	
		//Singleton_color[b_]		= 255;
		Singleton_color[r_] 	= redVal-mrOff;
		Singleton_color[g_] 	= 0;
		Singleton_color[b_] 	= blueVal-mbOff;
		}
	else if (SingCol == 5) // Cyan
		{
		Singleton_color[r_]  = 0;
		Singleton_color[g_]  = greenVal-cgOff;
		Singleton_color[b_] = blueVal-cbOff;
		}
	else if (SingCol == 6) // Gray
		{
		Singleton_color[r_] = redVal-wrOff;
		Singleton_color[g_] = greenVal-wgOff;
		Singleton_color[b_] = blueVal-wbOff;
		}
	 
	 
	// Now set non-singleton
	if ((State == run_anti_sess) || (State == run_color_pop) || (State == run_pop_prime))
	{
		
		if (DistCol == 0) // Red
			{
			NonSingleton_color[r_]		= redVal;	
			NonSingleton_color[g_]		= 0;	
			NonSingleton_color[b_]		= 0;
			}
		else if (DistCol == 1) // Green
			{
			NonSingleton_color[r_]		= 0;	
			NonSingleton_color[g_]		= greenVal;	
			NonSingleton_color[b_]		= 0;
			}
		else if (DistCol == 2) // Blue
			{
			NonSingleton_color[r_]		= 0;	
			NonSingleton_color[g_]		= 0;	
			NonSingleton_color[b_]		= blueVal;
			}		
		else if (DistCol == 3) // Yellow
			{
			NonSingleton_color[r_]		= redVal-yrOff;	
			NonSingleton_color[g_]		= greenVal-ygOff;	
			NonSingleton_color[b_]		= 0;
			}	
		else if (DistCol == 4) // Magenta
			{
			NonSingleton_color[r_]		= redVal-mrOff;	
			NonSingleton_color[g_]		= 0;	
			NonSingleton_color[b_]		= blueVal-mbOff;
			}
		else if (DistCol == 5) // Cyan
			{
			NonSingleton_color[r_]  = 0;
			NonSingleton_color[g_]  = greenVal-cgOff;
			NonSingleton_color[b_] = blueVal-cbOff;
			}
		else if (DistCol == 6) // Gray
			{
			NonSingleton_color[r_] = redVal-wrOff;
			NonSingleton_color[g_] = greenVal-wgOff;
			NonSingleton_color[b_] = blueVal-wbOff;
			}
		
		oppColor[r_] = NonSingleton_color[r_] + lumOffset;
		oppColor[g_] = NonSingleton_color[g_] + lumOffset;
		oppColor[b_] = NonSingleton_color[b_] + lumOffset;
		
		nexttick;
		// now let's set cue color
		if (cueColors[cueType] == 0) // Red
			{
			Cue_color[r_]		= redVal;	
			Cue_color[g_]		= 0;	
			Cue_color[b_]		= 0;
			}
		else if (cueColors[cueType] == 1) // Green
			{
			Cue_color[r_]		= 0;	
			Cue_color[g_]		= greenVal;	
			Cue_color[b_]		= 0;
			}
		else if (cueColors[cueType] == 2) // Blue
			{
			Cue_color[r_]		= 0;	
			Cue_color[g_]		= 0;	
			Cue_color[b_]		= blueVal;
			}		
		else if (cueColors[cueType] == 3) // Yellow
			{
			Cue_color[r_]		= redVal-yrOff;	
			Cue_color[g_]		= greenVal-ygOff;	
			Cue_color[b_]		= 0;
			}	
		else if (cueColors[cueType] == 4) // Magenta
			{
			Cue_color[r_]		= redVal-mrOff;	
			Cue_color[g_]		= 0;	
			Cue_color[b_]		= blueVal-mbOff;
			}
		else if (cueColors[cueType] == 5) // Fix color
			{
			Cue_color[r_] 		= 35;
			Cue_color[g_] 		= 33;
			Cue_color[b_] 		= 27;
			}
		
		// Drop codes for singleton, distractor, and cue colors
		Event_fifo[Set_event] = 700 + SingCol;										// queue strobe
		Set_event = (Set_event + 1) % Event_fifo_N;
		
		Event_fifo[Set_event] = 710 + DistCol;										// queue strobe
		Set_event = (Set_event + 1) % Event_fifo_N;
		
		Event_fifo[Set_event] = 730 + cueColors[cueType];										// queue strobe
		Set_event = (Set_event + 1) % Event_fifo_N;
				
	}
	nexttick;
	
	dsendf("cm 255 %d %d %d;\n",					// set the color of the fixation point to 255 (leaves room for many target colors)
						Fixation_color[r_],			// GLOBAL ALERT; Fixation_color is an array so it cannot be passed
	                    Fixation_color[g_],
						Fixation_color[b_]);
	
	dsendf("cm 254 %d %d %d;\n",					// set the color of the fixation point to 255 (leaves room for many target colors)
						Stop_sig_color[r_],			// GLOBAL ALERT; Fixation_color is an array so it cannot be passed
	                    Stop_sig_color[g_],
						Stop_sig_color[b_]);					
	
	dsendf("cm 253 %d %d %d;\n",					// set the color of the fixation point to 255 (leaves room for many target colors)
						Ignore_sig_color[r_],		// GLOBAL ALERT; Fixation_color is an array so it cannot be passed
	                    Ignore_sig_color[g_],
						Ignore_sig_color[b_]);
						
	dsendf("cm 252 %d %d %d;\n",					// set the color of the fixation point to 255 (leaves room for many target colors)
						Mask_sig_color[r_],		// GLOBAL ALERT; Fixation_color is an array so it cannot be passed
	                    Mask_sig_color[g_],
						Mask_sig_color[b_]);
	
	dsendf("cm 251 %d %d %d;\n",					// set the color of the fixation point to 255 (leaves room for many target colors)
						Singleton_color[r_],			// GLOBAL ALERT; Fixation_color is an array so it cannot be passed
	                    Singleton_color[g_],
						Singleton_color[b_]);

	dsendf("cm 250 %d %d %d;\n",					// set the color of the fixation point to 255 (leaves room for many target colors)
						NonSingleton_color[r_],			// GLOBAL ALERT; Fixation_color is an array so it cannot be passed
	                    NonSingleton_color[g_],
						NonSingleton_color[b_]);		

	dsendf("cm 249 %d %d %d;\n",					// set the color of the fixation point to 255 (leaves room for many target colors)
						Cue_color[r_],			// GLOBAL ALERT; Fixation_color is an array so it cannot be passed
	                    Cue_color[g_],
						Cue_color[b_]);			

	dsendf("cm 248 %d %d %d;\n",					// set the color of the fixation point to 255 (leaves room for many target colors)
						oppColor[r_],			// GLOBAL ALERT; Fixation_color is an array so it cannot be passed
	                    oppColor[g_],
						oppColor[b_]);	
	
	dsendf("cm 247 %d %d %d;\n",					// set the color of the fixation point to 255 (leaves room for many target colors)
						255,			// GLOBAL ALERT; Fixation_color is an array so it cannot be passed
	                    255,
						255);						
	}